open("/data/segmentation/segmentationData/demo-1.tif - watershed.tif");
open("/data/segmentation/segmentationData/0415-0465.roi");
run("Analyze Particles...", "size=0.4-Infinity clear add");
roiManager("Select", 0);
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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1131));
roiManager("Save", "/data/segmentation/segmentationData/RoiSet.zip");
open("/data/segmentation/segmentationData/demo-1.tif");
roiManager("Show All");
roiManager("Show None");
roiManager("Show All");
run("Set Measurements...", "area integrated redirect=None decimal=3");
roiManager("Measure");
saveAs("Results", "/data/segmentation/segmentationData/data1.csv");
open("/data/segmentation/segmentationData/demo-2.tif");
roiManager("Show All with labels");
roiManager("Show All");
roiManager("Measure");
run("Clear Results");
roiManager("Measure");
saveAs("Results", "/data/segmentation/segmentationData/data2.csv");
